PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = default
  Screen = 2
  Show mouse = True
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = Minimal final
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine text
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    TextComponent Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to start
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stimuli
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    CodeComponent code_stimuli
      Code Type = Auto->JS
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      Begin Experiment:
        # Define the possible options
        shapes = ["diamond", "circle", "wavey"]
        colors = ["green", "red", "blue"]
        quantities = [1, 2, 3]
        textures = ["filled", "blank", ]

        # Declare global variables
        chosen_shape = None
        chosen_color = None
        chosen_quantity = None
        chosen_texture = None

        # List to collect data
        data_collection = []
      Begin Routine:
        import random

        # Randomly select shape, color, and quantity for each trial
        chosen_shape = random.choice(shapes)
        chosen_color = random.choice(colors)
        chosen_quantity = random.choice(quantities)
        chosen_texture = random.choice(textures)

        # Define fixed y-coordinate for all shapes
        fixed_y = 0

        # Define base spacing based on the largest shape size
        shape_size = max(100, 150)  # Max size of the circle or diamond
        base_spacing = shape_size * 1.5  # Start with 1.5 times the size of the largest shape

        # Calculate positions based on the quantity, increasing spacing as needed
        positions = []
        if chosen_quantity == 1:
            positions = [(0, fixed_y)]  # Center position for one shape
        elif chosen_quantity == 2:
            # Use larger spacing for two shapes
            spacing = base_spacing * 1.2  # Adjust to further increase space
            positions = [(-spacing, fixed_y), (spacing, fixed_y)]
        elif chosen_quantity == 3:
            # Decrease spacing for three shapes to ensure they fit on screen
            spacing = base_spacing * 1.2  # Adjusted to fit within the screen
            positions = [(-spacing, fixed_y), (0, fixed_y), (spacing, fixed_y)]


        # In each shape condition
        if chosen_shape == "diamond":
            circle_shape.opacity = 0
            wavey_shape.opacity = 0
            diamond_shape.opacity = 1
            diamond_shape.fillColor = chosen_color if chosen_texture == "filled" else None
            diamond_shape.lineColor = chosen_color if chosen_texture == "blank" else None
            diamond_shape.lineWidth = 0 if chosen_texture == "filled" else 2  # No border for filled shapes

            for i in range(chosen_quantity):
                diamond_shape.pos = positions[i]
                diamond_shape.draw()

        elif chosen_shape == "circle":
            diamond_shape.opacity = 0
            wavey_shape.opacity = 0
            circle_shape.opacity = 1
            circle_shape.fillColor = chosen_color if chosen_texture == "filled" else None
            circle_shape.lineColor = chosen_color if chosen_texture == "blank" else None
            circle_shape.lineWidth = 0 if chosen_texture == "filled" else 2

            for i in range(chosen_quantity):
                circle_shape.pos = positions[i]
                circle_shape.draw()

        elif chosen_shape == "wavey":
            diamond_shape.opacity = 0
            circle_shape.opacity = 0
            wavey_shape.opacity = 1
            wavey_shape.fillColor = chosen_color if chosen_texture == "filled" else None
            wavey_shape.lineColor = chosen_color if chosen_texture == "blank" else None
            wavey_shape.lineWidth = 0 if chosen_texture == "filled" else 2

            for i in range(chosen_quantity):
                wavey_shape.pos = positions[i]
                wavey_shape.draw()



        win.flip()  # Update the display
        core.wait(0.5)  # Wait for 500ms
      End Routine:
        # Record the variables in the Psychopy data file


        thisExp.addData('shape', chosen_shape)
        thisExp.addData('color', chosen_color)
        thisExp.addData('quantity', chosen_quantity)
        thisExp.addData('texture', chosen_texture)
    PolygonComponent circle_shape
      fillColor = white
      opacity = 0
      shape = circle
      size = (100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent diamond_shape
      fillColor = white
      opacity = 0
      shape = custom polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
      vertices = [(0, 150), (150, 0), (0, -150), (-150, 0)]
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    PolygonComponent wavey_shape
      fillColor = white
      opacity = 0
      shape = custom polygon...
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
      vertices = [(12.57, -112.5), (4.1, -112.5), (-1.99, -109.86), (-8.34, -105.03), (-15.49, -97.12), (-23.16, -84.81), (-27.93, -73.83), (-30.57, -65.04), (-33.75, -46.14), (-34.01, -29.0), (-33.49, -23.29), (-31.37, -10.99), (-26.07, 8.35), (-25.28, 14.5), (-25.28, 24.61), (-26.34, 35.16), (-32.96, 67.68), (-33.49, 76.46), (-33.22, 83.94), (-31.63, 92.72), (-28.72, 100.2), (-23.43, 107.67), (-16.28, 112.06), (-9.93, 112.94), (-3.84, 110.74), (4.9, 104.15), (12.84, 94.92), (20.25, 83.06), (26.34, 69.87), (29.78, 59.33), (32.96, 44.82), (34.01, 32.96), (33.49, 11.87), (30.31, -5.27), (25.54, -21.97), (24.22, -31.64), (24.22, -43.51), (25.01, -50.1), (28.99, -64.6), (31.1, -75.59), (30.84, -87.01), (28.46, -95.8), (23.96, -104.15), (18.13, -109.86)]
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  Routine Color
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    PolygonComponent outer_circle
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = circle
      size = (300)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent middle_circle
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      shape = circle
      size = (200)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent inner_circle
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (100)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent v_line
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = line
      size = (0.01, 2)
      startVal [time (s)] = 0.0
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    PolygonComponent h_line
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = triangle
      size = (2, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Begin Routine tab
        continueRoutine = True
        response_counter = 0  # Ensure response counter resets each time
      Each Frame:
        import math

        # Each frame
        mouse_buttons = mouse.getPressed()

        response_counter = 0  # Reset the response counter for each routine
        max_responses = 1     # Define max responses to control when the routine ends

        # Initialize variables at the start of each frame to ensure they have default values
        region = "None"
        color = "None"
        quadrant = "Unknown Quadrant"  # Initialize quadrant with a default value

        # Only proceed if the left mouse button is pressed and we haven't reached max responses
        if mouse_buttons[0] and response_counter < max_responses:
            # Check if the mouse clicked on any of the circles
            valid_click = False  # Assume the click is invalid initially

            if mouse.isPressedIn(inner_circle):
                region = "inner region"
                color = "Red"
                valid_click = True
            elif mouse.isPressedIn(middle_circle):
                region = "middle region"
                color = "Blue"
                valid_click = True
            elif mouse.isPressedIn(outer_circle):
                region = "outer region"
                color = "Green"
                valid_click = True

            # Only log data and increment counter if the click was valid (inside a circle)
            if valid_click:
                # Increment the response counter for valid clicks
                response_counter += 1

                # End routine if max responses reached
                if response_counter >= max_responses:
                    continueRoutine = False
                    print("Routine ending: Valid click within a circle and max responses reached.")
            else:
                # Click was outside any circle; no action taken, routine continues
                print("Click outside the circles; routine continues.")

            # Get the mouse position
            mouse_pos = mouse.getPos()
            radius = (mouse_pos[0]**2 + mouse_pos[1]**2)**0.5

            # Calculate the angle of the click
            angle = math.degrees(math.atan2(mouse_pos[1], mouse_pos[0]))
            if angle < 0:
                angle += 360  # Normalize angle to be between 0 and 360 degrees

            # Assign quadrant numbers based on 90-degree angle ranges
            if 0 <= angle < 90:
                quadrant = 1
            elif 90 <= angle < 180:
                quadrant = 2
            elif 180 <= angle < 270:
                quadrant = 3
            elif 270 <= angle < 360:
                quadrant = 4

            # Log all relevant data for each frame, regardless of whether a valid click occurred
            thisExp.addData("radius", radius)
            thisExp.addData("angle", angle)
            thisExp.addData("region", region)
            thisExp.addData("color", color)
            thisExp.addData("quadrant", quadrant)
    MouseComponent mouse
      clickable = outer_circle , middle_circle, inner_circle
      correctAns = outer_circle , middle_circle, inner_circle
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      saveParamsClickable = outer_circle , middle_circle, inner_circle
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
      syncScreenRefresh = True
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    TextComponent Very_confident
      letterHeight = 0.05
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0
      text = Very confident
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    TextComponent Not_sure_at_all
      letterHeight = 0.05
      pos = (0.8, 0.8)
      startVal [time (s)] = 0.0
      text = Not sure at all
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    TextComponent Somewhat_confidence
      letterHeight = 0.05
      pos = (-0.8, -0.8)
      startVal [time (s)] = 0.0
      text = Somewhat confidence
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    TextComponent somewhat_unsure
      letterHeight = 0.05
      pos = (0.8, -0.8)
      startVal [time (s)] = 0.0
      text = Somewhat not sure
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  Routine mask
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    ImageComponent image
      image = C:/Users/hourm/Dropbox/Projects/PhD/T Lab/Stimulu.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine Shape
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    PolygonComponent wavey
      fillColor = white
      pos = (200, 0)
      shape = custom polygon...
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = pix
      vertices = [(12.57, -112.5), (4.1, -112.5), (-1.99, -109.86), (-8.34, -105.03), (-15.49, -97.12), (-23.16, -84.81), (-27.93, -73.83), (-30.57, -65.04), (-33.75, -46.14), (-34.01, -29.0), (-33.49, -23.29), (-31.37, -10.99), (-26.07, 8.35), (-25.28, 14.5), (-25.28, 24.61), (-26.34, 35.16), (-32.96, 67.68), (-33.49, 76.46), (-33.22, 83.94), (-31.63, 92.72), (-28.72, 100.2), (-23.43, 107.67), (-16.28, 112.06), (-9.93, 112.94), (-3.84, 110.74), (4.9, 104.15), (12.84, 94.92), (20.25, 83.06), (26.34, 69.87), (29.78, 59.33), (32.96, 44.82), (34.01, 32.96), (33.49, 11.87), (30.31, -5.27), (25.54, -21.97), (24.22, -31.64), (24.22, -43.51), (25.01, -50.1), (28.99, -64.6), (31.1, -75.59), (30.84, -87.01), (28.46, -95.8), (23.96, -104.15), (18.13, -109.86)]
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    PolygonComponent circle
      fillColor = white
      pos = (-200, 0)
      shape = circle
      size = 150
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent diamond
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      units = pix
      vertices = [(0, 75), (75, 0), (0, -75), (-75, 0)]
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    MouseComponent mouse_resp
      clickable = wavey , circle, diamond
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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Flow
  Routine text
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine Stimuli
    Routine mask
    Routine Color
    Routine Shape
  LoopTerminator trials
